<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xml:base="" cmeta:id="hodgkin_huxley_squid_axon_1952" name="hodgkin_huxley_squid_axon_1952"> 

<documentation xmlns="http://cellml.org/tmp-documentation">
 <article>
 <section id="sec_status">
  <title>Model Status</title> 
  <para>This version has had a stimulus protocol component added to allow the model to simulate multiple action potentials, has been unit checked and curated and is known to run in COR and PCEnv.</para> 
  </section>
 <sect1 id="sec_structure">
  <title>Model Structure</title> 
  
  <para>
In a series of papers published in 1952, A.L. Hodgkin and A.F. Huxley presented the results of a series of experiments in which they investigated the flow of electric current through the surface membrane of the giant nerve fibre of a squid. In the summary paper of the Hodgkin and Huxley model, the authors developed a mathematical description of the behaviour of the membrane based upon these experiments, which accounts for the conduction and excitation of the fibre. The form of this description has been used as the basis for almost all other ionic current models of excitable tissues, including Purkinje fibres and cardiac atrial and ventricular muscle.
</para>
  
  <para>The summary paper is cited below:</para> 
 
 <para>
 A Quantitative Description of Membrane Current and its Application to Conduction and Excitation in Nerve, A. L. Hodgkin and A. F. Huxley, 1952, <emphasis>The Journal of Physiology</emphasis>, 117, 500-544.
  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=12991237&amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 12991237</ulink>
 </para>
 
 <informalfigure float="0" id="fig_circuit_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>Electrical circuit describing the current across the cell membrane</title>
    </objectinfo>
    <imagedata fileref="hodgkin_1952.png"/>
  </imageobject>
</mediaobject>
<caption>A schematic cell diagram describing the current flows across the cell membrane that are captured in the Hodgkin Huxley model.</caption>
</informalfigure>

  </sect1>
  </article>
  </documentation>   
  
   <units name="millisecond">
      <unit prefix="milli" units="second"/>
   </units>
   <units name="per_millisecond">
      <unit exponent="-1" prefix="milli" units="second"/>
   </units>
   <units name="millivolt">
      <unit prefix="milli" units="volt"/>
   </units>
   <units name="per_millivolt_millisecond">
      <unit exponent="-1" units="millivolt"/>
      <unit exponent="-1" prefix="milli" units="second"/>
   </units>
   <units name="milliS_per_mm2">
      <unit prefix="milli" units="siemens"/>
      <unit exponent="-2" prefix="milli" units="metre"/>
   </units>
   <units name="microF_per_mm2">
      <unit prefix="micro" units="farad"/>
      <unit exponent="-2" prefix="milli" units="metre"/>
   </units>
   <units name="microA_per_mm2">
      <unit prefix="micro" units="ampere"/>
      <unit exponent="-2" prefix="milli" units="metre"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="millisecond"/>
   </component>
   <component name="membrane">
      <variable cmeta:id="membrane_V" initial_value="-70" name="V" public_interface="out" units="millivolt"/>
      <variable initial_value="-70" name="E_R" public_interface="out" units="millivolt"/>
      <variable initial_value="0.01" name="Cm" units="microF_per_mm2"/>
      <variable name="time" public_interface="in" units="millisecond"/>
      <variable name="i_Na" public_interface="in" units="microA_per_mm2"/>
      <variable name="i_K" public_interface="in" units="microA_per_mm2"/>
      <variable name="i_L" public_interface="in" units="microA_per_mm2"/>
      <variable name="i_KA" public_interface="in" units="microA_per_mm2"/>
      <variable name="i_KCa" public_interface="in" units="microA_per_mm2"/>
      <variable name="i_Stim" units="microA_per_mm2"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>i_Stim</ci><piecewise><piece><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_mm2">0.3</cn><apply><and/><apply><geq/><ci>time</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">100</cn></apply><apply><leq/><ci>time</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">100.5</cn></apply></apply></piece><piece><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_mm2">0.3</cn></apply><apply><and/><apply><geq/><ci>time</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">100.5</cn></apply><apply><leq/><ci>time</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">101</cn></apply></apply></piece><otherwise><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="microA_per_mm2">0</cn></otherwise></piecewise></apply><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>V</ci></apply><apply><divide/><apply><minus/><apply><plus/><apply><minus/><ci>i_Stim</ci></apply><ci>i_Na</ci><ci>i_K</ci><ci>i_L</ci><ci>i_KA</ci><ci>i_KCa</ci></apply></apply><ci>Cm</ci></apply></apply></math>
   </component>
   <component name="sodium_channel">
      <variable cmeta:id="sodium_channel_i_Na" name="i_Na" public_interface="out" units="microA_per_mm2"/>
      <variable initial_value="3.786" name="g_Na" units="milliS_per_mm2"/>
      <variable name="E_Na" units="millivolt"/>
      <variable name="time" private_interface="out" public_interface="in" units="millisecond"/>
      <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
      <variable name="E_R" public_interface="in" units="millivolt"/>
      <variable name="m" private_interface="in" units="dimensionless"/>
      <variable name="h" private_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>E_Na</ci><apply><plus/><ci>E_R</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">130.599999999999994</cn></apply></apply><apply><eq/><ci>i_Na</ci><apply><times/><ci>g_Na</ci><apply><power/><ci>m</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn></apply><ci>h</ci><apply><minus/><ci>V</ci><ci>E_Na</ci></apply></apply></apply></math>
   </component>
   <component name="sodium_channel_m_gate">
      <variable initial_value="0.0195" name="m" public_interface="out" units="dimensionless"/>
      <variable name="alpha_m" units="per_millisecond"/>
      <variable name="beta_m" units="per_millisecond"/>
      <variable name="V" public_interface="in" units="millivolt"/>
      <variable name="time" public_interface="in" units="millisecond"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>alpha_m</ci><apply><divide/><apply><times/><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millivolt_millisecond">2.725</cn></apply><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">35</cn></apply></apply><apply><minus/><apply><exp/><apply><divide/><apply><minus/><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">35</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">10</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn></apply></apply></apply><apply><eq/><ci>beta_m</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millisecond">90.829999999999998</cn><apply><exp/><apply><divide/><apply><minus/><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">60</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">20</cn></apply></apply></apply></apply><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>m</ci></apply><apply><minus/><apply><times/><ci>alpha_m</ci><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn><ci>m</ci></apply></apply><apply><times/><ci>beta_m</ci><ci>m</ci></apply></apply></apply></math>
   </component>
   <component name="sodium_channel_h_gate">
      <variable initial_value="0.9524" name="h" public_interface="out" units="dimensionless"/>
      <variable name="alpha_h" units="per_millisecond"/>
      <variable name="beta_h" units="per_millisecond"/>
      <variable name="V" public_interface="in" units="millivolt"/>
      <variable name="time" public_interface="in" units="millisecond"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>alpha_h</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millisecond">1.817</cn><apply><exp/><apply><divide/><apply><minus/><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">52</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">20</cn></apply></apply></apply></apply><apply><eq/><ci>beta_h</ci><apply><divide/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millisecond">27.25</cn><apply><plus/><apply><exp/><apply><divide/><apply><minus/><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">22</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">10</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn></apply></apply></apply><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>h</ci></apply><apply><minus/><apply><times/><ci>alpha_h</ci><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn><ci>h</ci></apply></apply><apply><times/><ci>beta_h</ci><ci>h</ci></apply></apply></apply></math>
   </component>
   <component name="potassium_channel">
      <variable cmeta:id="potassium_channel_i_K" name="i_K" public_interface="out" units="microA_per_mm2"/>
      <variable initial_value="1.346" name="g_K" units="milliS_per_mm2"/>
      <variable name="E_K" units="millivolt"/>
      <variable name="time" private_interface="out" public_interface="in" units="millisecond"/>
      <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
      <variable name="E_R" public_interface="in" units="millivolt"/>
      <variable name="n" private_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>E_K</ci><apply><minus/><ci>E_R</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">31.34</cn></apply></apply><apply><eq/><ci>i_K</ci><apply><times/><ci>g_K</ci><apply><power/><ci>n</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn></apply><apply><minus/><ci>V</ci><ci>E_K</ci></apply></apply></apply></math>
   </component>
   <component name="potassium_channel_n_gate">
      <variable initial_value="0.0454" name="n" public_interface="out" units="dimensionless"/>
      <variable name="alpha_n" units="per_millisecond"/>
      <variable name="beta_n" units="per_millisecond"/>
      <variable name="V" public_interface="in" units="millivolt"/>
      <variable name="time" public_interface="in" units="millisecond"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>alpha_n</ci><apply><divide/><apply><times/><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millivolt_millisecond">0.09575</cn></apply><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">37</cn></apply></apply><apply><minus/><apply><exp/><apply><divide/><apply><minus/><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">37</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">10</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn></apply></apply></apply><apply><eq/><ci>beta_n</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millisecond">1.915</cn><apply><exp/><apply><divide/><apply><minus/><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">47</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">80</cn></apply></apply></apply></apply><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>n</ci></apply><apply><minus/><apply><times/><ci>alpha_n</ci><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn><ci>n</ci></apply></apply><apply><times/><ci>beta_n</ci><ci>n</ci></apply></apply></apply></math>
   </component>
   <component name="potassuim_A_channel">
      <variable cmeta:id="potassuim_A_channel_i_KA" name="i_KA" public_interface="out" units="microA_per_mm2"/>
      <variable initial_value="0.36" name="g_KA" units="milliS_per_mm2"/>
      <variable name="E_K" units="millivolt"/>
      <variable name="time" private_interface="out" public_interface="in" units="millisecond"/>
      <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
      <variable name="E_R" public_interface="in" units="millivolt"/>
      <variable name="a" private_interface="in" units="dimensionless"/>
      <variable name="hA" private_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>E_K</ci><apply><minus/><ci>E_R</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">31.34</cn></apply></apply><apply><eq/><ci>i_KA</ci><apply><times/><ci>g_KA</ci><apply><power/><ci>a</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn></apply><ci>hA</ci><apply><minus/><ci>V</ci><ci>E_K</ci></apply></apply></apply></math>
   </component>
   <component name="potassuim_A_channel_a_gate">
      <variable initial_value="0.0249" name="a" public_interface="out" units="dimensionless"/>
      <variable name="alpha_a" units="per_millisecond"/>
      <variable name="beta_a" units="per_millisecond"/>
      <variable name="V" public_interface="in" units="millivolt"/>
      <variable name="time" public_interface="in" units="millisecond"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>alpha_a</ci><apply><divide/><apply><times/><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millivolt_millisecond">0.006</cn></apply><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">90</cn></apply></apply><apply><minus/><apply><exp/><apply><divide/><apply><minus/><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">90</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">10</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn></apply></apply></apply><apply><eq/><ci>beta_a</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millisecond">0.1</cn><apply><exp/><apply><divide/><apply><minus/><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">30</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">10</cn></apply></apply></apply></apply><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>a</ci></apply><apply><minus/><apply><times/><ci>alpha_a</ci><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn><ci>a</ci></apply></apply><apply><times/><ci>beta_a</ci><ci>a</ci></apply></apply></apply></math>
   </component>
   <component name="potassuim_A_channel_hA_gate">
      <variable initial_value="0.5833" name="hA" public_interface="out" units="dimensionless"/>
      <variable name="alpha_hA" units="per_millisecond"/>
      <variable name="beta_hA" units="per_millisecond"/>
      <variable name="V" public_interface="in" units="millivolt"/>
      <variable name="time" public_interface="in" units="millisecond"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>alpha_hA</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millisecond">0.04</cn><apply><exp/><apply><divide/><apply><minus/><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">70</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">20</cn></apply></apply></apply></apply><apply><eq/><ci>beta_hA</ci><apply><divide/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_millisecond">0.6</cn><apply><plus/><apply><exp/><apply><divide/><apply><minus/><apply><plus/><ci>V</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">40</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">10</cn></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn></apply></apply></apply><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>hA</ci></apply><apply><minus/><apply><times/><ci>alpha_hA</ci><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn><ci>hA</ci></apply></apply><apply><times/><ci>beta_hA</ci><ci>hA</ci></apply></apply></apply></math>
   </component>
   <component name="potassuim_Ca_current">
      <variable cmeta:id="potassuim_Ca_i_KCa" name="i_KCa" public_interface="out" units="microA_per_mm2"/>
      <variable initial_value="5e-4" name="g_KCa" units="milliS_per_mm2"/>
      <variable name="E_K" units="millivolt"/>
      <variable name="time" public_interface="in" units="millisecond"/>
      <variable name="V" public_interface="in" units="millivolt"/>
      <variable name="E_R" public_interface="in" units="millivolt"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>E_K</ci><apply><minus/><ci>E_R</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">31.34</cn></apply></apply><apply><eq/><ci>i_KCa</ci><apply><times/><ci>g_KCa</ci><apply><minus/><ci>V</ci><ci>E_K</ci></apply></apply></apply></math>
   </component>
   <component name="leakage_current">
      <variable cmeta:id="leakage_current_i_L" name="i_L" public_interface="out" units="microA_per_mm2"/>
      <variable initial_value="231e-5" name="g_L" units="milliS_per_mm2"/>
      <variable name="E_L" units="millivolt"/>
      <variable name="time" public_interface="in" units="millisecond"/>
      <variable name="V" public_interface="in" units="millivolt"/>
      <variable name="E_R" public_interface="in" units="millivolt"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><ci>E_L</ci><apply><plus/><ci>E_R</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millivolt">5.42</cn></apply></apply><apply><eq/><ci>i_L</ci><apply><times/><ci>g_L</ci><apply><minus/><ci>V</ci><ci>E_L</ci></apply></apply></apply></math>
   </component>
   <group>
      <relationship_ref relationship="containment"/>
      <component_ref component="membrane">
         <component_ref component="sodium_channel">
            <component_ref component="sodium_channel_m_gate"/>
            <component_ref component="sodium_channel_h_gate"/>
         </component_ref>
         <component_ref component="potassium_channel">
            <component_ref component="potassium_channel_n_gate"/>
         </component_ref>
         <component_ref component="potassuim_A_channel">
            <component_ref component="potassuim_A_channel_a_gate"/>
            <component_ref component="potassuim_A_channel_hA_gate"/>
         </component_ref>
         <component_ref component="potassuim_Ca_current"/>
         <component_ref component="leakage_current"/>
      </component_ref>
   </group>
   <group>
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="sodium_channel">
         <component_ref component="sodium_channel_m_gate"/>
         <component_ref component="sodium_channel_h_gate"/>
      </component_ref>
      <component_ref component="potassium_channel">
         <component_ref component="potassium_channel_n_gate"/>
      </component_ref>
      <component_ref component="potassuim_A_channel">
         <component_ref component="potassuim_A_channel_a_gate"/>
         <component_ref component="potassuim_A_channel_hA_gate"/>
      </component_ref>
   </group>
   <connection>
      <map_components component_1="membrane" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="sodium_channel" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="potassium_channel" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="potassuim_A_channel" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="potassuim_Ca_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="leakage_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="sodium_channel"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="E_R" variable_2="E_R"/>
      <map_variables variable_1="i_Na" variable_2="i_Na"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="potassium_channel"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="E_R" variable_2="E_R"/>
      <map_variables variable_1="i_K" variable_2="i_K"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="potassuim_A_channel"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="E_R" variable_2="E_R"/>
      <map_variables variable_1="i_KA" variable_2="i_KA"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="potassuim_Ca_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="E_R" variable_2="E_R"/>
      <map_variables variable_1="i_KCa" variable_2="i_KCa"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="leakage_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="E_R" variable_2="E_R"/>
      <map_variables variable_1="i_L" variable_2="i_L"/>
   </connection>
   <connection>
      <map_components component_1="sodium_channel" component_2="sodium_channel_m_gate"/>
      <map_variables variable_1="m" variable_2="m"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="sodium_channel" component_2="sodium_channel_h_gate"/>
      <map_variables variable_1="h" variable_2="h"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="potassuim_A_channel" component_2="potassuim_A_channel_a_gate"/>
      <map_variables variable_1="a" variable_2="a"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="potassuim_A_channel" component_2="potassuim_A_channel_hA_gate"/>
      <map_variables variable_1="hA" variable_2="hA"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="potassium_channel" component_2="potassium_channel_n_gate"/>
      <map_variables variable_1="n" variable_2="n"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   
   
<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:about="rdf:#$Upnot2">
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
<rdf:first>
<rdf:Description rdf:about="rdf:#$Vpnot2"/>
</rdf:first>
</rdf:Description>
<rdf:Description rdf:about="rdf:#5bc4f7d2-1306-4281-88b5-a5afe628bc66">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2007-06-15T12:32:55+12:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#2f069a61-06ba-4782-a877-f31e770cdf0d">
<JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#6a5c1370-80c1-4b42-aead-44170b5e073e"/>
</JournalArticle>
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">12991237</Pubmed_id>
</rdf:Description>
<rdf:Description rdf:about="rdf:#110653f5-2489-488d-a6ed-8e8d5e1e49d0">
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#5f6a3f59-56b0-4c8f-9885-b8cf157290ef"/>
</ORG>
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#18be6072-0bb2-486b-bf47-d786a8ccb00a"/>
</EMAIL>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#e64f82a7-a34d-4f8b-8e60-012dbf5ea240"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#926f9f08-b397-491a-ac44-76e38b182232">
<modified xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#86821b4a-b64d-46a1-8aec-e3f4544cb540"/>
</modified>
<cmeta:modifier>
<rdf:Description rdf:about="rdf:#d7dedc5f-038d-45c5-b191-69311c173c69"/>
</cmeta:modifier>
<rdf:value xml:lang="en">Fixed the broken figure links.</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#b7d9bdf8-8ab9-4b18-903c-84dc2b140727">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#2513dee6-5449-443a-b035-2ff762ff3069"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#$Vpnot2">
<maximumStepSize xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">0.1</maximumStepSize>
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">120</endingValue>
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">50000</pointDensity>
</rdf:Description>
<rdf:Description rdf:about="rdf:#eee0af8e-5256-4021-9426-80fe492518bc">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Journal of Physiology</title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#957446e8-2852-4457-a3f6-0e87906f21b9">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">1952-01-01</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#85f445d5-2b20-4a8a-937a-44890e1ccf00">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#9b923383-f1a8-48c7-b1ee-0ca41c08de54"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#66bca445-cdee-4030-81ee-ed5b822bf666">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#6d8cd909-915e-4a88-96ee-33dcda056c46"/>
</creator>
<rdf:value xml:lang="en">This is the CellML description of Hodgkin and Huxley's inspirational work on a mathematical description of currents through the membrane of a nerve fibre (axon) in a giant squid, and their application to the modelling of excitation in the nerve. It is generally regarded as the first example of a mathematical model of biology.</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#9ee1d23e-9cd8-45d8-8b8f-fcf480cf5c95">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2002-07-19</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#110653f5-2489-488d-a6ed-8e8d5e1e49d0"/>
</creator>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">A quantitative description of membrane current and its application to conduction and excitation in nerve (Original Model + Stimulus)</title>
<cmeta:comment>
<rdf:Description rdf:about="rdf:#5f502734-46d5-4a70-bd04-3e0f1d128044"/>
</cmeta:comment>
<publisher xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">The University of Auckland, Bioengineering Institute</publisher>
<cmeta:modification>
<rdf:Description rdf:about="rdf:#11e3f403-75e7-4da6-9f6b-c5732c0cab1d"/>
</cmeta:modification>
<cmeta:modification>
<rdf:Description rdf:about="rdf:#926f9f08-b397-491a-ac44-76e38b182232"/>
</cmeta:modification>
<cmeta:modification>
<rdf:Description rdf:about="rdf:#00da010f-7f66-47c5-89f7-a0d13ca1ddf4"/>
</cmeta:modification>
<cmeta:modification>
<rdf:Description rdf:about="rdf:#f0c9b743-d359-449c-ac0c-25d95cf30ee6"/>
</cmeta:modification>
<cmeta:modification>
<rdf:Description rdf:about="rdf:#384803b0-d02a-414d-86fe-2ead34d6ede9"/>
</cmeta:modification>
<cmeta:modification>
<rdf:Description rdf:about="rdf:#8fd18725-5764-4794-8857-23e4f6ce4b18"/>
</cmeta:modification>
<cmeta:modification>
<rdf:Description rdf:about="rdf:#70de1e12-eccf-4c2c-a514-a53a1018aeb3"/>
</cmeta:modification>
<created xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#665adec2-47bb-4f04-80a1-68f545e81a0e"/>
</created>
</rdf:Description>
<rdf:Description rdf:about="rdf:#bde7bd97-4909-4ba8-8a80-7457d90944ff">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lloyd</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">May</Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#11e3f403-75e7-4da6-9f6b-c5732c0cab1d">
<modified xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#140c4615-dbeb-4856-aa9c-68f554470dfa"/>
</modified>
<cmeta:modifier>
<rdf:Description rdf:about="rdf:#b7d9bdf8-8ab9-4b18-903c-84dc2b140727"/>
</cmeta:modifier>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e64f82a7-a34d-4f8b-8e60-012dbf5ea240">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lloyd</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">May</Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#70de1e12-eccf-4c2c-a514-a53a1018aeb3">
<modified xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#5bc4f7d2-1306-4281-88b5-a5afe628bc66"/>
</modified>
<cmeta:modifier>
<rdf:Description rdf:about="rdf:#e897f342-e771-4ae3-876d-062dfdfccc88"/>
</cmeta:modifier>
<rdf:value xml:lang="en">Added stimulus protocol to allow simulation of trains of action potentials. The stimulus amplitude (20 microamperes per cm2) and duration (0.5 ms) were taken from the single stimulus in the previous version. Set a period of 200 ms (arbitrary) to allow visualisation of 3 action potentials together at a resonable zoom level.</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#372d59c8-494a-409d-95e7-350b2ad6c199">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#645f2f0c-9134-420b-9177-df0862a7a1fc"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#5f6a3f59-56b0-4c8f-9885-b8cf157290ef">
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The Bioengineering Institute</Orgunit>
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname>
</rdf:Description>
<rdf:Description rdf:about="#hodgkin_huxley_squid_axon_1952">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">The Classic Hodgkin-Huxley 1952 Model of A Squid Axon.</title>
<cmeta:comment>
<rdf:Description rdf:about="rdf:#66bca445-cdee-4030-81ee-ed5b822bf666"/>
</cmeta:comment>
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">12991237</Pubmed_id>
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:about="rdf:#$Tpnot2"/>
</simulation>
<cmeta:bio_entity xml:lang="en">Neuron</cmeta:bio_entity>
<cmeta:species xml:lang="en">Squid</cmeta:species>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#c1c62bec-a4f9-4b41-91ab-bbc81d473192"/>
</reference>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#2f069a61-06ba-4782-a877-f31e770cdf0d"/>
</reference>
</rdf:Description>
<rdf:Description rdf:about="rdf:#5aa345d1-498a-40fe-852c-be5a6c19cb10">
<rdf:_2>
<rdf:Description rdf:about="rdf:#3e67593e-eafa-479e-8369-1879d475ea1a"/>
</rdf:_2>
<rdf:_1>
<rdf:Description rdf:about="rdf:#51a60dc9-2f70-4eb6-845a-1dafe7feb919"/>
</rdf:_1>
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#2db6628b-7f2e-4536-94e2-cbba185e47e3">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lloyd</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">May</Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#51a60dc9-2f70-4eb6-845a-1dafe7feb919">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#9402b850-7050-4483-9cc7-a84fe2f91be2"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#5f502734-46d5-4a70-bd04-3e0f1d128044">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#eee88e88-b221-451f-84ca-e2517ca582d7"/>
</creator>
<rdf:value xml:lang="en">This version (07) has had a stimulus protocol component added (to version 06, by James Lawson, 15/06/07) to allow the model to simulate multiple action potentials. Version 05 was created by Penny Noble of Oxford University and is known to run in COR and PCEnv. The intial voltage membrane potential was changed from 0 mV to the correct value of -75 mV. (Version 06 is the same as version 05 but has updated documentation)</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#665adec2-47bb-4f04-80a1-68f545e81a0e">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2002-03-26T00:00:00+00:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#$Tpnot2">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:about="rdf:#$Upnot2"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:about="rdf:#d7dedc5f-038d-45c5-b191-69311c173c69">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#2db6628b-7f2e-4536-94e2-cbba185e47e3"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#9b923383-f1a8-48c7-b1ee-0ca41c08de54">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Nickerson</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">David</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#56197c17-2399-482e-9645-a522ed0beb31">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lawson</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">James</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Richard</Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#34d6c118-3d31-4355-90dc-a2cb5ef18374">
<subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type>
<rdf:value>
<rdf:Description rdf:about="rdf:#e9e44e76-9801-4440-a074-6509ae83c1b7"/>
</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#6a5c1370-80c1-4b42-aead-44170b5e073e">
<last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">544</last_page>
<volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">117</volume>
<issued xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#957446e8-2852-4457-a3f6-0e87906f21b9"/>
</issued>
<first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">500</first_page>
<Journal xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#eee0af8e-5256-4021-9426-80fe492518bc"/>
</Journal>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#5aa345d1-498a-40fe-852c-be5a6c19cb10"/>
</creator>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">A quantitative description of membrane current and its application to conductance and excitation in nerve</title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#70448d97-7f25-4048-8bd3-da91d466bfd1">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2002-11-20</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#18a9b9a3-ea24-4c7d-9df0-4f3663e434bd">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#3b0e83c3-4898-4081-84fa-85c0d2807054"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#86821b4a-b64d-46a1-8aec-e3f4544cb540">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2007-06-14T07:38:16+12:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#645f2f0c-9134-420b-9177-df0862a7a1fc">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Nickerson</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">David</Given>
</rdf:Description>
<rdf:Description rdf:about="rdf:#00da010f-7f66-47c5-89f7-a0d13ca1ddf4">
<modified xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#9ee1d23e-9cd8-45d8-8b8f-fcf480cf5c95"/>
</modified>
<cmeta:modifier>
<rdf:Description rdf:about="rdf:#f9a8c5a9-bc9c-4b50-bdbe-e9e5956bc3bd"/>
</cmeta:modifier>
<rdf:value xml:lang="en">Added more metadata.</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#384803b0-d02a-414d-86fe-2ead34d6ede9">
<modified xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#70448d97-7f25-4048-8bd3-da91d466bfd1"/>
</modified>
<cmeta:modifier>
<rdf:Description rdf:about="rdf:#85f445d5-2b20-4a8a-937a-44890e1ccf00"/>
</cmeta:modifier>
<rdf:value xml:lang="en">Correcting the equation for dv/dt.</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#eee88e88-b221-451f-84ca-e2517ca582d7">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">James Lawson</FN>
</rdf:Description>
<rdf:Description rdf:about="rdf:#6875edb4-a9cd-4bb6-b8f9-03b2c7cc8124">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2007-06-15T12:32:55+12:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e9e44e76-9801-4440-a074-6509ae83c1b7">
<rdf:_2 xml:lang="en">giant axon</rdf:_2>
<rdf:_1 xml:lang="en">Neuron</rdf:_1>
<rdf:_3 xml:lang="en">electrophysiology</rdf:_3>
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#140c4615-dbeb-4856-aa9c-68f554470dfa">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2007-06-20T16:01:50+12:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#9402b850-7050-4483-9cc7-a84fe2f91be2">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Hodgkin</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">A</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">L</Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#0f72a1b1-ef97-4005-ad81-81353e3383ef">
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Huxley</Family>
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">A</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">F</Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#18be6072-0bb2-486b-bf47-d786a8ccb00a">
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
<rdf:value xml:lang="en">c.lloyd@auckland.ac.nz</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#6d8cd909-915e-4a88-96ee-33dcda056c46">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Warren Hedley</FN>
</rdf:Description>
<rdf:Description rdf:about="rdf:#f0c9b743-d359-449c-ac0c-25d95cf30ee6">
<modified xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#bd2a51c8-81c1-4015-8a10-a0ff312038a5"/>
</modified>
<cmeta:modifier>
<rdf:Description rdf:about="rdf:#372d59c8-494a-409d-95e7-350b2ad6c199"/>
</cmeta:modifier>
<rdf:value xml:lang="en">Correcting the equation for dv/dt.</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#8fd18725-5764-4794-8857-23e4f6ce4b18">
<modified xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#6875edb4-a9cd-4bb6-b8f9-03b2c7cc8124"/>
</modified>
<cmeta:modifier>
<rdf:Description rdf:about="rdf:#18a9b9a3-ea24-4c7d-9df0-4f3663e434bd"/>
</cmeta:modifier>
</rdf:Description>
<rdf:Description rdf:about="rdf:#bd2a51c8-81c1-4015-8a10-a0ff312038a5">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2002-11-20</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#c1c62bec-a4f9-4b41-91ab-bbc81d473192">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#34d6c118-3d31-4355-90dc-a2cb5ef18374"/>
</subject>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e897f342-e771-4ae3-876d-062dfdfccc88">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#56197c17-2399-482e-9645-a522ed0beb31"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#f9a8c5a9-bc9c-4b50-bdbe-e9e5956bc3bd">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#bde7bd97-4909-4ba8-8a80-7457d90944ff"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#3e67593e-eafa-479e-8369-1879d475ea1a">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#0f72a1b1-ef97-4005-ad81-81353e3383ef"/>
</N>
</rdf:Description>
</rdf:RDF>
</model>